---
API: 2.1
OpenSesame: 3.3.11
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "Name Experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set osf_id 5dd3c8be2fefe5000c7adc83
set mouse_backend psycho
set keyboard_backend psycho
set height 720
set fullscreen no
set form_clicks no
set foreground white
set font_underline no
set font_size 21
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:/Users/LabUser/Desktop/Robbert/bthesis"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background "#404040"

define sketchpad EndExperiment
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="The experiment has finished. Thanks for the participation!" x=0 y=0 z_index=0

define RSVP_plugin RSVP
	set description "Add an RSVP to your experiment"
	set _targets "[T1stim];[T2stim]"
	set _target_positions "[T1pos];12"
	set _stimdur 90
	set _ntargets 2
	set _ndistractors 10
	set _fixdur 0
	set _event_handler "print(10)"
	set _distractors "[distractors]"

define sketchpad T1_ask_response
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#bebebe" font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="If you saw your name, press [T1responseyes]<br />If not, press [T1responseno]." x=0 y=0 z_index=0

define keyboard_response T1_get_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[T1_correct_response]"
	set allowed_responses "c;m"

define sketchpad T2_ask_response
	set duration 0
	set description "Displays stimuli"
	draw textline center=1 color="#bebebe" font_bold=no font_family=sans font_italic=no font_size=36 html=yes show_if=always text="If you saw ---------- press [T2responsedash]<br />If you saw ====== press [T2responseequal]" x=0 y=0 z_index=0

define keyboard_response T2_get_response
	set timeout infinite
	set flush yes
	set event_type keypress
	set duration keypress
	set description "Collects keyboard responses"
	set correct_response "[T2_correct_response]"
	set allowed_responses "c;m"

define inline_script VariableReset
	set description "Executes Python code"
	___run__
	var.trialnumber = 0
	var.blockno = 0
	var.cur_points = 0
	var.sum_points = 0
	__end__
	set _prepare ""

define sketchpad block_break
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="You finished a block of trials, press a button to start next block of trials." x=0 y=0 z_index=0

define form_consent consent_form
	set timeout infinite
	set spacing 10
	set rows "1;4;1;1"
	set only_render no
	set margins "50;50;50;50"
	set form_title "Consent form"
	__form_text__
	I have read the information about the research. I have had enough opportunity to ask questions about it.
	
	I understand what the research is about, what is being asked of me, which consequences participation can have, how my data will be handled, and what my rights as a participant are. 
	
	I understand that participation in the research is voluntary. I myself choose to participate. I can stop participating at any moment. If I stop, I do not need to explain why. Stopping will have no negative consequences for me.
	
	Below I indicate what I am consenting to.
	Yes: I consent to participate and to the processing of my personal data
	No: I do not consent to participate
	__end__
	set description "A simple consent form"
	set decline_text No
	set decline_message "You need to accept the consent form to participate!"
	set cols "2;2"
	set checkbox_text "I have read and understood the information shown above"
	set accept_text Yes
	set _theme gray
	widget 0 0 2 1 label text="[form_title]"
	widget 0 1 2 1 label center=no text="[form_text]"
	widget 0 2 2 1 checkbox text="[checkbox_text]" var=checkbox_status
	widget 0 3 1 1 button text="[accept_text]" var=accept_status
	widget 1 3 1 1 button text="[decline_text]"


define inline_script correctT1
	set description "Executes Python code"
	___run__
	var.T1_correct = var.correct
	
	if var.correct == 1:
	    var.score = var.T2hit
	    var.fb_color = 'green'
	elif var.correct == 0:
	    var.score = var.T2miss
	    var.fb_color = 'red'
	
	var.sum_points = var.sum_points + var.score
	
	#if var.correct and var.T1 == 'target_secret' and var.subject_parity == 'odd':
	#    var.kept_secret = 0
	#    var.sum_points = var.sum_points + var.secret_punish
	#else:
	#    var.kept_secret = 1
	__end__
	set _prepare ""

define inline_script correctT2
	set description "Executes Python code"
	___run__
	var.T2_correct = var.correct
	
	if var.correct == 1:
	    var.score = var.T1hit
	    var.fb_color = 'green'
	elif var.correct == 0:
	    var.score = var.T1miss
	    var.fb_color = 'red'
	    
	var.sum_points = var.sum_points + var.score
	__end__
	set _prepare ""

define pygaze_log end_phase_rsvp
	set throttle 2
	set msg "end_phase rsvp"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script enter_name
	set description "Executes Python code"
	___run__
	
	# Define all widgets
	button_ok = Button(text=u'Ok')
	
	label_sex= Label(u'Sex')
	checkbox_male = Checkbox(text=u'Male', group=u'sex', var=u'sex')
	checkbox_female = Checkbox(text=u'Female', group=u'sex', var=u'sex')
	label_handedness=Label(u'Handedness')
	checkbox_right = Checkbox(text=u'Right Handed', group=u'handedness', var=u'handedness')
	checkbox_left = Checkbox(text=u'Left Handed', group=u'handedness', var=u'handedness')
	label_age = Label(u'Age')
	label_realname=Label(u'First name')
	# Specify a key filter so that only digits are accepted as text input
	input_age = TextInput(stub=u'Age here …', var=u'age', key_filter=filter_digits)
	input_name=TextInput(stub=u'Write your name here …', var=u'realname')
	# Build the form. Specify a validator function to make sure that the form is
	# completed.
	my_form = Form(validator=my_form_validator, rows=[1,1,1,1,1], cols=[1,1,1,1])
	
	my_form.set_widget(label_sex, (0, 0))
	my_form.set_widget(checkbox_male, (1, 0))
	my_form.set_widget(checkbox_female, (2, 0))
	
	my_form.set_widget(label_handedness, (0, 1))
	my_form.set_widget(checkbox_right, (1, 1))
	my_form.set_widget(checkbox_left, (2, 1))
	
	my_form.set_widget(label_age, (0, 2))
	my_form.set_widget(input_age, (1, 2), colspan=2)
	my_form.set_widget(label_realname, (0, 3))
	my_form.set_widget(input_name, (1, 3), colspan=2)
	my_form.set_widget(button_ok, (1, 4))
	my_form._exec()
	var.realname = var.realname.capitalize()
	__end__
	___prepare__
	def my_form_validator():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.sex != u'no' and var.age != u'' and var.handedness != u'no' and var.realname!=u'no'
		
		
	def filter_digits(ch):
	
		"""Allows only digit characters as input"""
	
		return ch in u'0123456789'
	__end__

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run readme always
	run consent_form always
	run set_variables always
	run instructions_even "[subject_parity] = even"
	run instructions_odd "[subject_parity] = odd"
	run enter_name always
	run pick_fake_name always
	run pygaze_init always
	run practice_instructions_even "[subject_parity] = even"
	run practice_instructions_odd "[subject_parity] = odd"
	run practice_loop always
	run practice_end always
	run VariableReset always
	run experimental_loop always
	run EndExperiment always

define loop experimental_loop
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 T1 target_secret
	setcycle 0 T1pos 5
	setcycle 0 T2 dash
	setcycle 0 practice yes
	setcycle 1 T1 target
	setcycle 1 T1pos 5
	setcycle 1 T2 dash
	setcycle 1 practice yes
	setcycle 2 T1 no_target
	setcycle 2 T1pos 5
	setcycle 2 T2 dash
	setcycle 2 practice yes
	setcycle 3 T1 control
	setcycle 3 T1pos 5
	setcycle 3 T2 dash
	setcycle 3 practice yes
	setcycle 4 T1 target_secret
	setcycle 4 T1pos 6
	setcycle 4 T2 dash
	setcycle 4 practice yes
	setcycle 5 T1 target
	setcycle 5 T1pos 6
	setcycle 5 T2 dash
	setcycle 5 practice yes
	setcycle 6 T1 no_target
	setcycle 6 T1pos 6
	setcycle 6 T2 dash
	setcycle 6 practice yes
	setcycle 7 T1 control
	setcycle 7 T1pos 6
	setcycle 7 T2 dash
	setcycle 7 practice yes
	setcycle 8 T1 target_secret
	setcycle 8 T1pos 7
	setcycle 8 T2 dash
	setcycle 8 practice yes
	setcycle 9 T1 target
	setcycle 9 T1pos 7
	setcycle 9 T2 dash
	setcycle 9 practice yes
	setcycle 10 T1 no_target
	setcycle 10 T1pos 7
	setcycle 10 T2 dash
	setcycle 10 practice yes
	setcycle 11 T1 control
	setcycle 11 T1pos 7
	setcycle 11 T2 dash
	setcycle 11 practice yes
	setcycle 12 T1 target_secret
	setcycle 12 T1pos 8
	setcycle 12 T2 dash
	setcycle 12 practice yes
	setcycle 13 T1 target
	setcycle 13 T1pos 8
	setcycle 13 T2 dash
	setcycle 13 practice yes
	setcycle 14 T1 no_target
	setcycle 14 T1pos 8
	setcycle 14 T2 dash
	setcycle 14 practice yes
	setcycle 15 T1 control
	setcycle 15 T1pos 8
	setcycle 15 T2 dash
	setcycle 15 practice yes
	setcycle 16 T1 target_secret
	setcycle 16 T1pos 9
	setcycle 16 T2 dash
	setcycle 16 practice yes
	setcycle 17 T1 target
	setcycle 17 T1pos 9
	setcycle 17 T2 dash
	setcycle 17 practice yes
	setcycle 18 T1 no_target
	setcycle 18 T1pos 9
	setcycle 18 T2 dash
	setcycle 18 practice yes
	setcycle 19 T1 control
	setcycle 19 T1pos 9
	setcycle 19 T2 dash
	setcycle 19 practice yes
	setcycle 20 T1 target_secret
	setcycle 20 T1pos 10
	setcycle 20 T2 dash
	setcycle 20 practice yes
	setcycle 21 T1 target
	setcycle 21 T1pos 10
	setcycle 21 T2 dash
	setcycle 21 practice yes
	setcycle 22 T1 no_target
	setcycle 22 T1pos 10
	setcycle 22 T2 dash
	setcycle 22 practice yes
	setcycle 23 T1 control
	setcycle 23 T1pos 10
	setcycle 23 T2 dash
	setcycle 23 practice yes
	setcycle 24 T1 target_secret
	setcycle 24 T1pos 5
	setcycle 24 T2 equal
	setcycle 24 practice yes
	setcycle 25 T1 target
	setcycle 25 T1pos 5
	setcycle 25 T2 equal
	setcycle 25 practice yes
	setcycle 26 T1 no_target
	setcycle 26 T1pos 5
	setcycle 26 T2 equal
	setcycle 26 practice yes
	setcycle 27 T1 control
	setcycle 27 T1pos 5
	setcycle 27 T2 equal
	setcycle 27 practice yes
	setcycle 28 T1 target_secret
	setcycle 28 T1pos 6
	setcycle 28 T2 equal
	setcycle 28 practice yes
	setcycle 29 T1 target
	setcycle 29 T1pos 6
	setcycle 29 T2 equal
	setcycle 29 practice yes
	setcycle 30 T1 no_target
	setcycle 30 T1pos 6
	setcycle 30 T2 equal
	setcycle 30 practice yes
	setcycle 31 T1 control
	setcycle 31 T1pos 6
	setcycle 31 T2 equal
	setcycle 31 practice yes
	setcycle 32 T1 target_secret
	setcycle 32 T1pos 7
	setcycle 32 T2 equal
	setcycle 32 practice yes
	setcycle 33 T1 target
	setcycle 33 T1pos 7
	setcycle 33 T2 equal
	setcycle 33 practice yes
	setcycle 34 T1 no_target
	setcycle 34 T1pos 7
	setcycle 34 T2 equal
	setcycle 34 practice yes
	setcycle 35 T1 control
	setcycle 35 T1pos 7
	setcycle 35 T2 equal
	setcycle 35 practice yes
	setcycle 36 T1 target_secret
	setcycle 36 T1pos 8
	setcycle 36 T2 equal
	setcycle 36 practice yes
	setcycle 37 T1 target
	setcycle 37 T1pos 8
	setcycle 37 T2 equal
	setcycle 37 practice yes
	setcycle 38 T1 no_target
	setcycle 38 T1pos 8
	setcycle 38 T2 equal
	setcycle 38 practice yes
	setcycle 39 T1 control
	setcycle 39 T1pos 8
	setcycle 39 T2 equal
	setcycle 39 practice yes
	setcycle 40 T1 target_secret
	setcycle 40 T1pos 9
	setcycle 40 T2 equal
	setcycle 40 practice yes
	setcycle 41 T1 target
	setcycle 41 T1pos 9
	setcycle 41 T2 equal
	setcycle 41 practice yes
	setcycle 42 T1 no_target
	setcycle 42 T1pos 9
	setcycle 42 T2 equal
	setcycle 42 practice yes
	setcycle 43 T1 control
	setcycle 43 T1pos 9
	setcycle 43 T2 equal
	setcycle 43 practice yes
	setcycle 44 T1 target_secret
	setcycle 44 T1pos 10
	setcycle 44 T2 equal
	setcycle 44 practice yes
	setcycle 45 T1 target
	setcycle 45 T1pos 10
	setcycle 45 T2 equal
	setcycle 45 practice yes
	setcycle 46 T1 no_target
	setcycle 46 T1pos 10
	setcycle 46 T2 equal
	setcycle 46 practice yes
	setcycle 47 T1 control
	setcycle 47 T1pos 10
	setcycle 47 T2 equal
	setcycle 47 practice yes
	run trial_sequence

define sketchpad fixation
	set duration 0
	set description "Displays stimuli"
	draw fixdot color=white show_if=always style=default x=0 y=0 z_index=0

define advanced_delay fixation_wait
	set jitter_mode Uniform
	set jitter 250
	set duration 750
	set description "Waits for a specified duration"

define sketchpad instructions_even
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="Welcome to this experiment!<br /><br />During the following procedure, the camera in front of you measures the size of your pupil while you look at names on the screen. <br /><br />The names will be shown so briefly you'll hardly be able to see them. <br /><br />In some instances, you'll see your own name in there (fill it out in the next screen). <br /><br />Practically, after you've seen a bunch of names, you're asked to indicate if you saw your own name. <br /><br />Press a button to continue" x=0 y=0 z_index=0

define sketchpad instructions_odd
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="Welcome to this experiment!<br /><br />During the following procedure, the camera in front of you measures the size of your pupil while you look at names on the screen. <br /><br />The names will be shown so briefly you'll hardly be able to see them. <br /><br />In some instances, you'll see your own name in there (fill it out in the next screen). We think that, by measuring your pupil size, we can find out what your real name is. It's your job to try to hide your real name from us, by assuming a new name (we'll also pick that in the next screen). <br /><br />Practically, after you've seen a bunch of names, you're asked to indicate if you saw your own (newly assumed) name. (so you actively ignore your actual name). <br /><br />Press a button to continue" x=0 y=0 z_index=0

define logger logger
	set description "Logs experimental data"
	set auto_log yes

define inline_script pick_fake_name
	set description "Executes Python code"
	___run__
	# load male and female names
	with open(pool[u'male_names.txt']) as f:
	    male_names = f.read().split('\n')
	    # print(len(male_names))
	    male_names = exclude_names(male_names, var.realname)
	    # print(len(male_names))    
	
	with open(pool[u'female_names.txt']) as f:
	    female_names = f.read().split('\n')
	    # print(len(female_names))
	    female_names = exclude_names(female_names, var.realname)
	    # print(len(female_names))
					
	# pick a name of pp own sex
	if var.sex=='Male':
		namepickerlist = np.random.choice(male_names, 15, replace = False)
	else:
		namepickerlist = np.random.choice(female_names, 15, replace = False)
	
	# odd pps pick their new fake name, even pps get one assigned randomly (extra control name)
	if var.subject_parity == 'odd':
		button_ok2 = Button(text=u'Ok')
		
		label_fakenamelist = Label(u'fakeNamelist')
		label_fakenames = Label(u'Choose a name which you will pretend to be your real name during the experiment.')
		
		my_form2 = Form(validator = my_form_validator2, rows = [1, 1 ,1 ,1 ,1 ,1 ,1], cols = [1 ,1 ,1])
		my_form2.set_widget(label_fakenames, (0, 0), colspan = 3)
		
		fakenamelistwidget={}
		for i in range(0, len(namepickerlist)):
			fakenamelistwidget[i]=Checkbox(text=namepickerlist[i],group=u'fakename',var=u'fakename')
			if i==0:
				my_form2.set_widget(fakenamelistwidget[i], (0, i+1))
			else:
				my_form2.set_widget(fakenamelistwidget[i], (int((i+1)/5), int((i+1)%5)+1))
		
		my_form2.set_widget(button_ok2, (1, 6))
		my_form2._exec()
	else:
		var.fakename = np.random.choice(namepickerlist, 1, replace=False)[0]
	
	if var.subject_parity == 'odd':
		# to odd pps, the target is their chosen fake name. 	
		var.target = var.fakename
		var.secret_target = var.realname
	else:
		# to even pps, the secret target is just another control name that doesn't mean anything to them
		var.target = var.realname
		var.secret_target = var.fakename
	
	distractor_list = female_names + male_names
	var.control_distractor = np.random.choice(distractor_list, 1, replace=False)[0]
	# create the final list of distractors, exclude possible T1 names
	distractor_list = exclude_names(exclude_names(exclude_names(distractor_list, var.realname), var.fakename), var.control_distractor)
	var.distractor_list_length = len(distractor_list)
	__end__
	___prepare__
	def my_form_validator2():
	
		"""Checks whether both the gender and age fields have been filled out"""
	
		return var.fakename!=u'no'
	__end__

define sketchpad post_trial
	set duration 500
	set description "Displays stimuli"
	draw fixdot color="#bebebe" show_if=always style=default x=0 y=0 z_index=0

define sketchpad practice_end
	set duration keypress
	set description "Displays stimuli"
	draw textline center=1 color="#ffffff" font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="These were the practice trials. If you have any questions about the task, please ask the experimenter. <br /><br />Press a button to start the actual experiment. " x=0 y=0 z_index=0

define feedback practice_instructions_even
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#bebebe" font_bold=no font_family=sans font_italic=no font_size=26 html=yes show_if=always text="Your task is to closely watch a stream of names and try to spot your name ([realname]). If you saw it, you press [T1responseyes]. If you didn't, you press [T1responseno]. <br /><br />At the end of the stream, you'll see a bunch of dashes (------) or equal signs (=====). If you saw ---------- press [T2responsedash]. If you saw ====== press [T2responseequal]. <br /><br />Don't worry yet about memorizing these buttons, we'll keep reminding you. <br /><br />Press a button to practice the task. " x=-13 y=-34 z_index=0

define feedback practice_instructions_odd
	set reset_variables yes
	set duration keypress
	set description "Provides feedback to the participant"
	draw textline center=1 color="#bebebe" font_bold=no font_family=sans font_italic=no font_size=26 html=yes show_if=always text="Remember, try to ignore your real name. From now on your name is [fakename]. <br /><br />Your task is to closely watch a stream of names and try to spot your name ([fakename]). If you saw it, you press [T1responseyes]. If you didn't, you press [T1responseno]. <br /><br />At the end of the stream, you'll see a bunch of dashes (------) or equal signs (=====). If you saw ---------- press [T2responsedash]. If you saw ====== press [T2responseequal]. <br /><br />Don't worry yet about memorizing these buttons, we'll keep reminding you. <br /><br />Press a button to practice the task. " x=-13 y=-34 z_index=0

define loop practice_loop
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 48
	set continuous no
	set break_if_on_first yes
	set break_if "[trialnumber] = 10"
	setcycle 0 T1 target_secret
	setcycle 0 T1pos 5
	setcycle 0 T2 dash
	setcycle 0 practice yes
	setcycle 1 T1 target
	setcycle 1 T1pos 5
	setcycle 1 T2 dash
	setcycle 1 practice yes
	setcycle 2 T1 no_target
	setcycle 2 T1pos 5
	setcycle 2 T2 dash
	setcycle 2 practice yes
	setcycle 3 T1 control
	setcycle 3 T1pos 5
	setcycle 3 T2 dash
	setcycle 3 practice yes
	setcycle 4 T1 target_secret
	setcycle 4 T1pos 6
	setcycle 4 T2 dash
	setcycle 4 practice yes
	setcycle 5 T1 target
	setcycle 5 T1pos 6
	setcycle 5 T2 dash
	setcycle 5 practice yes
	setcycle 6 T1 no_target
	setcycle 6 T1pos 6
	setcycle 6 T2 dash
	setcycle 6 practice yes
	setcycle 7 T1 control
	setcycle 7 T1pos 6
	setcycle 7 T2 dash
	setcycle 7 practice yes
	setcycle 8 T1 target_secret
	setcycle 8 T1pos 7
	setcycle 8 T2 dash
	setcycle 8 practice yes
	setcycle 9 T1 target
	setcycle 9 T1pos 7
	setcycle 9 T2 dash
	setcycle 9 practice yes
	setcycle 10 T1 no_target
	setcycle 10 T1pos 7
	setcycle 10 T2 dash
	setcycle 10 practice yes
	setcycle 11 T1 control
	setcycle 11 T1pos 7
	setcycle 11 T2 dash
	setcycle 11 practice yes
	setcycle 12 T1 target_secret
	setcycle 12 T1pos 8
	setcycle 12 T2 dash
	setcycle 12 practice yes
	setcycle 13 T1 target
	setcycle 13 T1pos 8
	setcycle 13 T2 dash
	setcycle 13 practice yes
	setcycle 14 T1 no_target
	setcycle 14 T1pos 8
	setcycle 14 T2 dash
	setcycle 14 practice yes
	setcycle 15 T1 control
	setcycle 15 T1pos 8
	setcycle 15 T2 dash
	setcycle 15 practice yes
	setcycle 16 T1 target_secret
	setcycle 16 T1pos 9
	setcycle 16 T2 dash
	setcycle 16 practice yes
	setcycle 17 T1 target
	setcycle 17 T1pos 9
	setcycle 17 T2 dash
	setcycle 17 practice yes
	setcycle 18 T1 no_target
	setcycle 18 T1pos 9
	setcycle 18 T2 dash
	setcycle 18 practice yes
	setcycle 19 T1 control
	setcycle 19 T1pos 9
	setcycle 19 T2 dash
	setcycle 19 practice yes
	setcycle 20 T1 target_secret
	setcycle 20 T1pos 10
	setcycle 20 T2 dash
	setcycle 20 practice yes
	setcycle 21 T1 target
	setcycle 21 T1pos 10
	setcycle 21 T2 dash
	setcycle 21 practice yes
	setcycle 22 T1 no_target
	setcycle 22 T1pos 10
	setcycle 22 T2 dash
	setcycle 22 practice yes
	setcycle 23 T1 control
	setcycle 23 T1pos 10
	setcycle 23 T2 dash
	setcycle 23 practice yes
	setcycle 24 T1 target_secret
	setcycle 24 T1pos 5
	setcycle 24 T2 equal
	setcycle 24 practice yes
	setcycle 25 T1 target
	setcycle 25 T1pos 5
	setcycle 25 T2 equal
	setcycle 25 practice yes
	setcycle 26 T1 no_target
	setcycle 26 T1pos 5
	setcycle 26 T2 equal
	setcycle 26 practice yes
	setcycle 27 T1 control
	setcycle 27 T1pos 5
	setcycle 27 T2 equal
	setcycle 27 practice yes
	setcycle 28 T1 target_secret
	setcycle 28 T1pos 6
	setcycle 28 T2 equal
	setcycle 28 practice yes
	setcycle 29 T1 target
	setcycle 29 T1pos 6
	setcycle 29 T2 equal
	setcycle 29 practice yes
	setcycle 30 T1 no_target
	setcycle 30 T1pos 6
	setcycle 30 T2 equal
	setcycle 30 practice yes
	setcycle 31 T1 control
	setcycle 31 T1pos 6
	setcycle 31 T2 equal
	setcycle 31 practice yes
	setcycle 32 T1 target_secret
	setcycle 32 T1pos 7
	setcycle 32 T2 equal
	setcycle 32 practice yes
	setcycle 33 T1 target
	setcycle 33 T1pos 7
	setcycle 33 T2 equal
	setcycle 33 practice yes
	setcycle 34 T1 no_target
	setcycle 34 T1pos 7
	setcycle 34 T2 equal
	setcycle 34 practice yes
	setcycle 35 T1 control
	setcycle 35 T1pos 7
	setcycle 35 T2 equal
	setcycle 35 practice yes
	setcycle 36 T1 target_secret
	setcycle 36 T1pos 8
	setcycle 36 T2 equal
	setcycle 36 practice yes
	setcycle 37 T1 target
	setcycle 37 T1pos 8
	setcycle 37 T2 equal
	setcycle 37 practice yes
	setcycle 38 T1 no_target
	setcycle 38 T1pos 8
	setcycle 38 T2 equal
	setcycle 38 practice yes
	setcycle 39 T1 control
	setcycle 39 T1pos 8
	setcycle 39 T2 equal
	setcycle 39 practice yes
	setcycle 40 T1 target_secret
	setcycle 40 T1pos 9
	setcycle 40 T2 equal
	setcycle 40 practice yes
	setcycle 41 T1 target
	setcycle 41 T1pos 9
	setcycle 41 T2 equal
	setcycle 41 practice yes
	setcycle 42 T1 no_target
	setcycle 42 T1pos 9
	setcycle 42 T2 equal
	setcycle 42 practice yes
	setcycle 43 T1 control
	setcycle 43 T1pos 9
	setcycle 43 T2 equal
	setcycle 43 practice yes
	setcycle 44 T1 target_secret
	setcycle 44 T1pos 10
	setcycle 44 T2 equal
	setcycle 44 practice yes
	setcycle 45 T1 target
	setcycle 45 T1pos 10
	setcycle 45 T2 equal
	setcycle 45 practice yes
	setcycle 46 T1 no_target
	setcycle 46 T1pos 10
	setcycle 46 T2 equal
	setcycle 46 practice yes
	setcycle 47 T1 control
	setcycle 47 T1pos 10
	setcycle 47 T2 equal
	setcycle 47 practice yes
	run trial_sequence

define pygaze_drift_correct pygaze_drift_correct
	set ypos 0
	set xpos 0
	set target_style default
	set target_color "[foreground]"
	set fixation_triggered yes
	set draw_target yes
	set description "Perform eye-tracker drift correction"

define pygaze_init pygaze_init
	set tracker_type EyeLink
	set tobiiglasses_udpport 49152
	set tobiiglasses_address "192.168.71.50"
	set smi_send_port 4444
	set smi_recv_port 5555
	set smi_ip "127.0.0.1"
	set sacc_vel_thr 35
	set sacc_acc_thr 9500
	set eyelink_pupil_size_mode area
	set eyelink_force_drift_correct yes
	set description "Initialize and calibrate eye tracker"
	set calibrate yes
	set calbeep yes
	set alea_api_key "Contact Alea for an API key"
	set alea_animated_calibration no
	set _logfile automatic

define pygaze_log pygaze_log
	set throttle 2
	set msg ""
	set description "Writes information to the eye-tracker logfile"
	set auto_log yes

define pygaze_start_recording pygaze_start_recording
	set status_msg "start_trial [count_trial_sequence]"
	set description "Puts the eye tracker into recording mode"

define pygaze_stop_recording pygaze_stop_recording
	set status_msg stop_trial
	set description "Stops recording of eye tracking data"

define notepad readme
	__note__
	This experiment runs the pilot study for the name detector study
	
	Author: Robbert van der Mijn, w.r.van.der.mijn@rug.nl
	
	Based on the study by Chen/Karabay: y.chen@rug.nl
	
	Trials are presented in 4 conditions which are slightly different for even and odd participants:
	
	even pps:
	- target (their REAL name)
	- target_secret (always the same randomly chosen distractor)
	- control (always the same randomly chosen distractor)
	- no_target (each trial a different randomly chosen distractor)
	
	odd pps:
	- target (their FAKE name, chosen from 15 options of own sex)
	- target_secret (their REAL name)
	- control (always the same randomly chosen distractor)
	- no_target (each trial a different randomly chosen distractor)
	
	You need the RSVP plugin for this experiment to work, install it by running the following commands in the OpenSesame Console:
	
	import pip
	pip.main(['install', 'opensesame-plugin-RSVP'])
	__end__
	set description "A simple notepad to document your experiment. This plug-in does nothing."

define inline_script set_variables
	set description "Executes Python code"
	set _run ""
	___prepare__
	import numpy as np
	
	var.ISIduration = 6 
	var.itemduration = 86
	var.fixationduration = 996
	var.trialnumber = 0
	var.blockno = 0 
	var.number_trials_block = 32
	var.number_trials_experiment = 96
	var.trialtype = 0
	var.equal = u'=========='
	var.dash = u'----------'
	
	# reward scheme
	var.T1hit = 5
	var.T1miss = -5
	var.T2hit = 10
	var.T2miss = -10
	# var.secret_punish = -50
	var.trialtype = 0
	var.cur_points = 0
	var.sum_points = 0
	
	# counterbalance response keys per 2 pp numbers
	if var.subject_nr%4 == 1 or var.subject_nr%4 == 2:
		var.T1responseyes = 'c'
		var.T1responseno = 'm'
		var.T2responsedash = 'c'
		var.T2responseequal = 'm'
	else:
		var.T1responseyes = 'm'
		var.T1responseno = 'c'
		var.T2responsedash = 'm'
		var.T2responseequal = 'c'
	
	symbollist=['#','+']
	
	# Specify functions used to exclude names that are too similar
	
	def overlap(test, ref):
		
		"""Gets the number of characters that are the same and in the same position
		for both test and ref.
		"""
		
		return sum(
			test_char == ref_char
			for test_char, ref_char
			in zip(test, ref)
		)
	def shifted_overlap(test, ref):
	
		"""Gets the character overlap between test and ref, but without requiring
		that the starting position is the same.
		"""
		return max(
			max(
				overlap(test[start_index:], ref)
				for start_index
				in range(len(test))
			),
			max(
				overlap(test, ref[start_index:])
				for start_index
				in range(len(ref))
			)
		)
	
	
	def any_overlap(test, ref):
		
		"""Gets the number of characters that are the same and in the same position
		for both test and ref.
		"""
		
		return sum(
			test_char == ref_char
			for test_char, ref_char
			in zip(test, ref)
		)
		
	def exclude_names(namelist, critical_name):
		clean_list = []
		for name in namelist:
			if shifted_overlap(name, critical_name) > 3:
				print('Removing {}'.format(name))
				continue
			clean_list.append(name)
		return clean_list
	
	def pad_word(word, nchars = 11):
		if len(word) > nchars:
			raise ValueError('Name must be shorter than ' + str(nchars))
		else:
			padlength = nchars - len(word)
		
		# determine the number of padding symbols (randomly fill up on the left or right of the number is uneven)
		if padlength % 2 == 0:
			pad_left = int(padlength / 2)
			pad_right = int(padlength - pad_left)
		else:
			pad_left = int((padlength/2) + np.random.randint(0,1))
			pad_right = int(padlength - pad_left)
		
		return ''.join(np.random.choice(symbollist) for _ in range(pad_left)) + word + ''.join(np.random.choice(symbollist) for _ in range(pad_right))
	
	cnvs_fix = Canvas()
	cnvs_fix.fixdot(color=u'rgb(190,190,190)')
	cnvs_ISI = Canvas()
	__end__

define feedback showfeedback_T1
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="[sum_points]" x=0 y=0 z_index=0
	draw textline center=1 color="[fb_color]" font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="[score]" x=64 y=-32 z_index=0

define feedback showfeedback_T2
	set reset_variables yes
	set duration 1000
	set description "Provides feedback to the participant"
	draw textline center=1 color=white font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="[sum_points]" x=0 y=0 z_index=0
	draw textline center=1 color="[fb_color]" font_bold=no font_family=sans font_italic=no font_size=21 html=yes show_if=always text="[score]" x=64 y=-32 z_index=0

define pygaze_log start_phase_rsvp
	set throttle 2
	set msg "start_phase rsvp"
	set description "Writes information to the eye-tracker logfile"
	set auto_log no

define inline_script trial_prepare
	set description "Executes Python code"
	set _run ""
	___prepare__
	if var.trialnumber % var.number_trials_block == 0:
		var.blockno = var.blockno + 1
	var.trialnumber = var.trialnumber + 1
	
	# Get fresh list of distractors and shuffle it
	# distractor_pool = distractor_list.copy()
	distractor_pool = list(distractor_list)
	
	np.random.shuffle(distractor_pool)
	
	# Determine T1 stimulus
	if var.T1 == 'target':
		var.T1stim = var.target
		var.T1_correct_response = var.T1responseyes
	elif var.T1 == 'no_target':
		var.T1stim = distractor_pool.pop()
		var.T1_correct_response = var.T1responseno
	elif var.T1 == 'target_secret':
		var.T1stim = var.secret_target		
		var.T1_correct_response = var.T1responseno
	elif var.T1 == 'control':
		var.T1stim = var.control_distractor
		var.T1_correct_response = var.T1responseno
	
	if var.T2 == 'dash':
		var.T2stim = var.dash
		var.T2_correct_response = var.T2responsedash
	else:
		var.T2stim = var.equal
		var.T2_correct_response = var.T2responseequal
					
	distractors = list(np.random.choice(distractor_pool, 10, replace = False))
	rsvp = distractors + [var.T2]
	rsvp.insert(var.T1pos - 1, var.T1stim)
	
	numberofmatches = [0] * len(rsvp)
	while True:
		for i in range(len(rsvp)-1):
			if overlap(rsvp[i], rsvp[i+1]) > 1:
				numberofmatches[i] = 1
			elif overlap(rsvp[i], rsvp[i+1]) < 2:
				numberofmatches[i]=0
	
		if sum(numberofmatches) == 0:
			break
			
		else:
			distractors = list(np.random.choice(distractor_pool, 10, replace = False))
			rsvp = distractors + [var.T2stim]
			rsvp.insert(var.T1pos - 1, var.T1)	
	
	distractors = [pad_word(word) for word in distractors]
	var.distractors = ';'.join(distractors)
	var.T1stim = pad_word(var.T1stim)
	
	print(var.T1)
	print(var.T1stim)
	__end__

define sequence trial_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run pygaze_drift_correct always
	run pygaze_start_recording always
	run trial_prepare always
	run fixation always
	run fixation_wait always
	run start_phase_rsvp always
	run RSVP always
	run post_trial always
	run end_phase_rsvp always
	run T2_ask_response always
	run T2_get_response always
	run correctT2 always
	run showfeedback_T2 always
	run T1_ask_response always
	run T1_get_response always
	run correctT1 always
	run showfeedback_T1 always
	run pygaze_log always
	run pygaze_stop_recording always
	run logger always
	run block_break "[practice] = 'no' and [trialnumber] % [number_trials_block] = 0 and [trialnumber] < [number_trials_experiment]"

